PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Management
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Routines
  Routine background
    TextComponent text1
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Background1
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  Routine background2
    TextComponent text
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Background2
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  Routine question
    TextComponent text_question
      font = Kai
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Background3
      wrapWidth = 1
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_A
      font = Kai
      letterHeight = 0.05
      pos = (-0.5, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $A
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    TextComponent text_B
      font = Kai
      letterHeight = 0.05
      pos = (0.5, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $B
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    TextComponent text_f
      letterHeight = 0.03
      pos = (-0.5,-0.3)
      startVal [time (s)] = 0.0
      text = press f
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    TextComponent text_j
      letterHeight = 0.03
      pos = (0.5,-0.3)
      startVal [time (s)] = 0.0
      text = press j
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  Routine feedback
    TextComponent text_3
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Feedback
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  Routine final
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_1
  Routine fix
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instru
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press ‘space’ to continue
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  Routine y_1
    TextComponent text_2
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1. 您对该业绩评价结果的满意度
    KeyboardComponent key_resp_yfeedback
      allowedKeys = '0','1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      font = Kai
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1   2   3   4   5   6   7
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    TextComponent text_7
      font = Kai
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 非常不满意  不满意  有点不满意  中立  有点满意  满意  非常满意
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  Routine y_2
    TextComponent text_8
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 2. 您认为该业绩评价结果主要归因于[单选题]
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    TextComponent text_9
      font = Kai
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        ○内部因素（个人能力或努力等）请按f

        ○外部因素（环境或运气等）请按j
    KeyboardComponent key_resp_3
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine y_3
    TextComponent text_10
      font = Kai
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 3.您对未来进一步提升此项业绩评价的意愿程度
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    TextComponent text_11
      font = KAi
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1   2   3   4   5   6   7
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    TextComponent text_12
      font = Kai
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 非常不满意  不满意  有点不满意  中立  有点满意  满意  非常满意
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    KeyboardComponent key_resp_4
      allowedKeys = '0','1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine y_4
    TextComponent text_13
      font = KAi
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 4. 您对未来进一步提升此项业绩评价的信心程度
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    TextComponent text_14
      font = Kai
      letterHeight = 0.06
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = 1   2   3   4   5   6   7
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    TextComponent text_15
      font = Kai
      letterHeight = 0.025
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = 非常没信心  没信心  有点没信心  中立  有点信息  有信心  非常有信心
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    KeyboardComponent key_resp_5
      allowedKeys = '0','1','2','3','4','5','6','7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instru
  LoopInitiator trial loopType="TrialHandler"
    Selected rows = 0:149
    conditionsFile = Management-text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.181091815682792, '场景': 298, 'Background1': '你是一家装备制造企业的生产主管。', 'Background2': '目标获得生产标兵称号3次。', 'Background3': '你可以选择效率提升评选或质量达标评选。你会选择？', 'A': '效率提升评选', 'B': '质量达标评选', 'Feedback': '你实际获得了1个，目标完成率为33%，未达考核要求'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.185116505607098, '场景': 94, 'Background1': '你是一家汽车销售公司的区域经理。', 'Background2': '目标将汽车月销量提升至100辆以上。', 'Background3': '你可以选择提供销售优惠或增加销售点。你会选择？', 'A': '提供销售优惠', 'B': '增加销售点', 'Feedback': '你实际提升了50辆的月销量，评级为差，未达考核要求。'},
      {'合并编号': 97, '反馈类型': '相对', '反馈正负': '正', 'List': 1, '伪随机': 0.189695193400972, '场景': 97, 'Background1': '你是一家软件开发公司的技术部门负责人。', 'Background2': '目标提升软件性能30%。', 'Background3': '你可以选择升级硬件或优化代码。你会选择？', 'A': '升级硬件', 'B': '优化代码', 'Feedback': '你实际提升了40%的软件性能，评级为优，超出考核要求'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.196333549522537, '场景': 208, 'Background1': '你是一家教育机构的活动运营经理。', 'Background2': '目标营销活动平均报名人数为100人/场。', 'Background3': '你可以选择裂变营销或早鸟优惠。你会选择？', 'A': '裂变营销', 'B': '早鸟优惠', 'Feedback': '你实际达到了50人/场，目标完成率为50%，未达考核要求。'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.204751829459373, '场景': 78, 'Background1': '你是一家科技公司的产品经理。', 'Background2': '目标提升产品用户活跃度30%。', 'Background3': '你可以选择优化产品功能或增加用户激励措施。你会选择？', 'A': '优化产品功能', 'B': '增加用户激励措施', 'Feedback': '你实际提升了20%的产品用户活跃度，评级为差，未达考核要求。'},
      {'合并编号': 11, '反馈类型': '相对', '反馈正负': '正', 'List': 1, '伪随机': 0.209584727653892, '场景': 11, 'Background1': '你是一家IT公司的技术支持经理。', 'Background2': '目标将技术支持响应时间降低至2小时以内。', 'Background3': '你可以选择优化技术支持流程或增加技术支持人员。你会选择？', 'A': '优化技术支持流程', 'B': '增加技术支持人员', 'Feedback': '你实际将响应时间降至1小时内，评级为优，超出考核要求'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.210489583003559, '场景': 258, 'Background1': '你是一家奢侈品公司的VIP客户经理。', 'Background2': '目标新增高价值客户10个。', 'Background3': '你可以选择尊享活动或私人定制。你会选择？', 'A': '尊享活动', 'B': '私人定制', 'Feedback': '你实际新增了5个，目标完成率为50%，未达考核要求。'},
      {'合并编号': 175, '反馈类型': '绝对', '反馈正负': '正', 'List': 1, '伪随机': 0.221579422421156, '场景': 175, 'Background1': '你是一家电商公司的店铺运营主管。', 'Background2': '目标新增店铺粉丝数100个/月。', 'Background3': '你可以选择活动引流或内容引流。你会选择？', 'A': '活动引流', 'B': '内容引流', 'Feedback': '你实际新增了150个/月，目标完成率为150%，超出考核要求。'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.228767193286346, '场景': 124, 'Background1': '你是一家服装品牌的财务总监。', 'Background2': '目标将服装销售的毛利率提升至50%以上。', 'Background3': '你可以选择降低生产成本或提高产品定价。你会选择？', 'A': '降低生产成本', 'B': '提高产品定价', 'Feedback': '你实际将毛利率提升至45%，评级为差，未达考核要求。'},
      {'合并编号': 141, '反馈类型': '相对', '反馈正负': '正', 'List': 1, '伪随机': 0.229703681702514, '场景': 141, 'Background1': '你是一家航空公司的财务总监。', 'Background2': '目标将航班载客率提升至80%以上。', 'Background3': '你可以选择优化航班时刻或增加航班数量。你会选择？', 'A': '优化航班时刻', 'B': '增加航班数量', 'Feedback': '你实际将载客率提升至85%，评级为优，超出考核要求'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.235114709963715, '场景': 116, 'Background1': '你是一家出版社的版权经理。', 'Background2': '目标增加版权收入20%。', 'Background3': '你可以选择优化版权管理或增加版权合作。你会选择？', 'A': '优化版权管理', 'B': '增加版权合作', 'Feedback': '你实际增加了10%的版权收入，评级为差，未达考核要求。'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.240092876775758, '场景': 214, 'Background1': '你是一家酒店的总经理。', 'Background2': '目标年度入住率为80%。', 'Background3': '你可以选择增加营销活动或提升客房服务。你会选择？', 'A': '增加营销活动', 'B': '提升客房服务', 'Feedback': '你实际完成了40%的入住率，预算差异率为-50%，为不利差异，未达考核要求。'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.241106780408176, '场景': 220, 'Background1': '你是一家科技公司的商务拓展主管。', 'Background2': '目标新增销售合同20份。', 'Background3': '你可以选择渠道分销或主动开发。你会选择？', 'A': '渠道分销', 'B': '主动开发', 'Feedback': '你实际新增了8份，目标完成率为40%，未达考核要求。'},
      {'合并编号': 229, '反馈类型': '绝对', '反馈正负': '正', 'List': 1, '伪随机': 0.24451858502624, '场景': 229, 'Background1': '你是一家快消品公司的销售总监。', 'Background2': '目标销售收入增长率为20%。', 'Background3': '你可以选择深耕现有客户或开拓新市场。你会选择？', 'A': '深耕现有客户', 'B': '开拓新市场', 'Feedback': '你实际达到了30%，预算差异率为50%，为有利差异，超出考核要求。'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.244954973231477, '场景': 146, 'Background1': '你是一家科技公司的财务总监。', 'Background2': '目标将专利授权收入提升10%。', 'Background3': '你可以选择优化专利组合或增加专利申请。你会选择？', 'A': '优化专利组合', 'B': '增加专利申请', 'Feedback': '你实际将专利授权收入提升至5%，评级为差，未达考核要求。'},
      {'合并编号': 73, '反馈类型': '相对', '反馈正负': '正', 'List': 1, '伪随机': 0.255082577812119, '场景': 73, 'Background1': '你是一家广告公司的创意总监。', 'Background2': '目标创作5个新广告设计。', 'Background3': '你可以选择外包设计或内部设计团队。你会选择？', 'A': '外包设计', 'B': '内部设计团队', 'Feedback': '你实际创作了8个新广告设计，评级为优，超出考核要求'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.258581523127874, '场景': 182, 'Background1': '你是一家电影院的经理。', 'Background2': '目标月度观众人数为5000人。', 'Background3': '你可以选择提供优惠票价或增加电影放映场次。你会选择？', 'A': '提供优惠票价', 'B': '增加电影放映场次', 'Feedback': '你实际吸引了2500人，目标完成率为50%，未达考核要求。'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.259679054150605, '场景': 48, 'Background1': '你是一家化工企业的财务经理。', 'Background2': '目标将环保罚款控制在100万元以内。', 'Background3': '你可以选择优化生产流程或加强环保设施投入。你会选择？', 'A': '优化生产流程', 'B': '加强环保设施投入', 'Feedback': '你实际将环保罚款控制在150万元，评级为差，未达考核要求。'},
      {'合并编号': None, '反馈类型': '相对', '反馈正负': '负', 'List': 1, '伪随机': 0.266274332536772, '场景': 72, 'Background1': '你是一家建筑公司的项目总监。', 'Background2': '目标缩短项目完成时间20%。', 'Background3': '你可以选择优化项目计划或引入新型建筑技术。你会选择？', 'A': '优化项目计划', 'B': '引入新型建筑技术', 'Feedback': '你实际缩短了项目完成时间10%，评级为差，未达考核要求。'},
      {'合并编号': 41, '反馈类型': '相对', '反馈正负': '正', 'List': 1, '伪随机': 0.269335451348648, '场景': 41, 'Background1': '你是一家教育机构的内部控制经理。', 'Background2': '目标将学生辍学率降低至5%以内。', 'Background3': '你可以选择提升教学质量或加强学生辅导。你会选择？', 'A': '提升教学质量', 'B': '加强学生辅导', 'Feedback': '你实际将学生辍学率降至3%，评级为优，超出考核要求'},
      {'合并编号': None, '反馈类型': '绝对', '反馈正负': '负', 'List': 1, '伪随机': 0.273220435097598, '场景': 234, 'Background1': '你是一家零售企业的采购主管。', 'Background2': '目标季度采购成本降低率为10%。', 'Background3': '你可以选择议价采购或批量采购。你会选择？', 'A': '议价采购', 'B': '批量采购', 'Feedback': '你实际降低了5%的采购成本，预算差异率为-50%，为不利差异，未达考核要求。'},
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    Routine fix
    Routine background
    Routine background2
    Routine question
    Routine feedback
    Routine y_1
    Routine y_2
    Routine y_3
    Routine y_4
  LoopTerminator trial
  Routine final
